PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 720]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test1234
  Units = use prefs
  Screen = 1
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Routines
  Routine test1
    TextComponent text
      text [set every repeat] = $word1
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text [set every repeat] = $word2
      pos = [0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    TextComponent text_16
      text = Which word is more 'Word-like'?
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine test3
    SoundComponent lrsoundfile
      sound [set every repeat] = $lrsound
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text [set every repeat] = $lrword1
      pos = [-0.3, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent text_7
      text [set every repeat] = $lrword2
      pos = [0.3, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    TextComponent text_8
      text = Which word is Correct by your listening?
      pos = [0, 0.3]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine test4
    MicrophoneComponent mic
      stereo = False
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
    TextComponent text_15
      text = Speak loud and clear please!
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine break1
    TextComponent breakmes
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test4word
    TextComponent text_11
      text [set every repeat] = $recword
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_12
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you are ready to speak, Press 'SPACEBAR'.
        You should speak the word in 3 seconds.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break3
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break2
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, you can take a break as long as you need before continuing.
        Please, press 'SPACEBAR' when you are ready to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test2word1
    SoundComponent nonwo1
      sound [set every repeat] = $nonword1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you are ready to hear next word,
        Press 'SPACEBAR'.
  Routine test2word2
    SoundComponent nonwo2
      sound [set every repeat] = $nonword2
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which word is more 'Word-like'?
        If you think First one is more 'Word-like', Press 'F'.
        If you think second one is more 'Word-like', Press 'J'.
  Routine test3intro
    TextComponent test3IntroMsg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test3

        In this test, you will hear 34 spoken words.
        Then you need to choose one written word which you heard before.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR' for listening the first word.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Introduction
    TextComponent introMessage
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the LEAP Lab!
        You will have 5 test to measure your English Ablity.
        For the test, it will take about 1 and half hour including the break time.
        The break will be given during the each Test.
        If you have any questions during the test,
        please ask to the mannger in the break time or test intro time.
        Then, let's begin! Press the 'SPACEBAR'.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test1intro
    TextComponent test1Intro
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test1

        In this test, you will see 40 set of written pseudowords.
        Then you need to choose one word which seems more 'Wordlike'.
        When you think the Left word is more 'Word-like', then Press 'F'.
        When you think the Right word is more 'Word-like', then Press 'J'.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR'.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test3_res
  Routine test2break
    TextComponent text_14
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you are ready to listen next word,
        Press 'SPACEBAR'!
    KeyboardComponent key_resp_16
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test4intro
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test4

        In this test, you will see 36 written words.
        Then you need to speak the word as clear as you can.
        If you are ready, Press 'SPACEBAR'.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test2intro
    TextComponent test2IntroMsg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Test2

        In this test, you will hear 40 set of spoken pseudowords.
        Each word will be given by Pressing 'SPACEBAR'.
        Then you need to choose one word which sounds more 'Word-like'.
        When you think the First word is more 'Word-like', then Press 'F'.
        When you think the Second word is more 'Word-like', then Press 'J'.
        If you don't have confidnece about your choice, just believe your gut!
        If you are ready, Press 'SPACEBAR' for listening the first word.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endpage
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have now come to the end of our first 4 experiment.
        Now, you will have final test.
        Please wait for a while.
        Press, 'SPACEBAR' for tuning off the program.
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Introduction
  Routine test1intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'sourcetype': u'L', u'frame': u'polic', u'word1': u'policite', u'corrans': u'f', u'word2': u'poricite', u'difference': -0.0046999999999999265},
      {u'sourcetype': u'L', u'frame': u'plan', u'word1': u'plansy', u'corrans': u'f', u'word2': u'pransy', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'glas', u'word1': u'grasiam', u'corrans': u'j', u'word2': u'glasiam', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'blam', u'word1': u'bramojo', u'corrans': u'j', u'word2': u'blamojo', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'cloc', u'word1': u'crocisen', u'corrans': u'j', u'word2': u'clocisen', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'allo', u'word1': u'arlotony', u'corrans': u'j', u'word2': u'allotony', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'bloc', u'word1': u'blocaten', u'corrans': u'f', u'word2': u'brocaten', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'bles', u'word1': u'bresist', u'corrans': u'j', u'word2': u'blesist', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'clos', u'word1': u'crosenty', u'corrans': u'j', u'word2': u'closenty', u'difference': -0.046599999999999975},
      {u'sourcetype': u'L', u'frame': u'alon', u'word1': u'aloncio', u'corrans': u'f', u'word2': u'aroncio', u'difference': -0.046599999999999975}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
    Routine test1
  LoopTerminator trials
  Routine break1
  Routine test2intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'SourceType': u'L', u'frame': u'clas', u'nonword2': u'test2_audio/crasify.wav', u'nonword1': u'test2_audio/clasify.wav', u'difference': -0.046599999999999975, u'corrans': u'f'},
      {u'SourceType': u'L', u'frame': u'plan', u'nonword2': u'test2_audio/pranaquer.wav', u'nonword1': u'test2_audio/planaquer.wav', u'difference': -0.046599999999999975, u'corrans': u'f'},
      {u'SourceType': u'L', u'frame': u'clos', u'nonword2': u'test2_audio/closion.wav', u'nonword1': u'test2_audio/crosion.wav', u'difference': -0.046599999999999975, u'corrans': u'j'},
      {u'SourceType': u'L', u'frame': u'plac', u'nonword2': u'test2_audio/placar.wav', u'nonword1': u'test2_audio/pracar.wav', u'difference': -0.046599999999999975, u'corrans': u'j'},
      {u'SourceType': u'L', u'frame': u'alon', u'nonword2': u'test2_audio/alonuny.wav', u'nonword1': u'test2_audio/aronuny.wav', u'difference': -0.046599999999999975, u'corrans': u'j'},
      {u'SourceType': u'L', u'frame': u'slee', u'nonword2': u'test2_audio/sleekery.wav', u'nonword1': u'test2_audio/sreekery.wav', u'difference': -0.046599999999999975, u'corrans': u'j'},
      {u'SourceType': u'L', u'frame': u'plen', u'nonword2': u'test2_audio/prenth.wav', u'nonword1': u'test2_audio/plenth.wav', u'difference': -0.0466000000000002, u'corrans': u'f'},
      {u'SourceType': u'L', u'frame': u'clie', u'nonword2': u'test2_audio/cliement.wav', u'nonword1': u'test2_audio/criement.wav', u'difference': -0.046599999999999975, u'corrans': u'j'}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
    Routine test2word1
    Routine test2word2
    Routine test2break
  LoopTerminator trials_2
  Routine break2
  Routine test3intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = test3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'lrword1': u'fright', u'type': u'target', u'lrword2': u'flight\t\t\t\t\t', u'lrsound': u'test3_audio/fright.wav', u'corrans': u'f'},
      {u'lrword1': u'store', u'type': u'target', u'lrword2': u'stole\t\t\t\t\t', u'lrsound': u'test3_audio/store.wav', u'corrans': u'f'},
      {u'lrword1': u'frame', u'type': u'target', u'lrword2': u'flame\t\t\t\t\t', u'lrsound': u'test3_audio/flame.wav', u'corrans': u'j'},
      {u'lrword1': u'spray', u'type': u'target', u'lrword2': u'splay\t\t\t\t\t', u'lrsound': u'test3_audio/splay.wav', u'corrans': u'j'},
      {u'lrword1': u'crypt', u'type': u'target', u'lrword2': u'clip\t\t\t\t\t', u'lrsound': u'test3_audio/clip.wav', u'corrans': u'j'},
      {u'lrword1': u'crumb', u'type': u'target', u'lrword2': u'clumsy\t\t\t\t\t', u'lrsound': u'test3_audio/clumsy.wav', u'corrans': u'j'},
      {u'lrword1': u'brunt', u'type': u'target', u'lrword2': u'blunt\t\t\t\t\t', u'lrsound': u'test3_audio/brunt.wav', u'corrans': u'f'},
      {u'lrword1': u'grim', u'type': u'target', u'lrword2': u'glimpse\t\t\t\t\t', u'lrsound': u'test3_audio/glimpse.wav', u'corrans': u'j'},
      {u'lrword1': u'croak', u'type': u'target', u'lrword2': u'cloak\t\t\t\t\t', u'lrsound': u'test3_audio/cloak.wav', u'corrans': u'j'},
      {u'lrword1': u'laundry', u'type': u'target', u'lrword2': u'secondly\t\t\t\t\t', u'lrsound': u'test3_audio/laundry.wav', u'corrans': u'f'},
      {u'lrword1': u'foundry', u'type': u'target', u'lrword2': u'fondly\t\t\t\t\t', u'lrsound': u'test3_audio/fondly.wav', u'corrans': u'j'}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
    Routine test3
  LoopTerminator trials_3
  Routine break3
  Routine test4intro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = test4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'recword': u'rye', u'type': u'target'},
      {u'recword': u'river', u'type': u'target'},
      {u'recword': u'leap\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'root\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'reach\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'love\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'race', u'type': u'target'},
      {u'recword': u'land\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'life\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'rap', u'type': u'target'},
      {u'recword': u'lest\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'lope\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'rock', u'type': u'target'},
      {u'recword': u'link\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'lot\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'reader', u'type': u'target'},
      {u'recword': u'clown\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'grew', u'type': u'target'},
      {u'recword': u'arrive', u'type': u'target'},
      {u'recword': u'collect\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'poor', u'type': u'target'},
      {u'recword': u'heel\t\t\t\t\t', u'type': u'target'},
      {u'recword': u'over', u'type': u'target'},
      {u'recword': u'wire', u'type': u'target'},
      {u'recword': u'rake', u'type': u'target'},
      {u'recword': u'prizes', u'type': u'foil'},
      {u'recword': u'reviews', u'type': u'foil'},
      {u'recword': u'game', u'type': u'foil'},
      {u'recword': u'bag', u'type': u'foil'},
      {u'recword': u'safe', u'type': u'foil'},
      {u'recword': u'rang', u'type': u'foil'},
      {u'recword': u'van', u'type': u'foil'},
      {u'recword': u'bail', u'type': u'foil'}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
    Routine test4word
    Routine test4
  LoopTerminator trials_4
  Routine endpage
